OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.3.1)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Temporal Filter => #1
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 56
#0.Signal stream -> Temporal Filter => #2
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 4
  High Cut-off Frequency (Hz) = 30
Lua Stimulator => #3
  Lua Script = D:/sharegit/SomaStim/openvibe/Aire_20st.lua
Experiment information=#0.Experiment information, Signal=#0.Signal stream, Stimulations=#3 -> EDF File Writer
  Filename = D:/Neuro/Data/raw_record-[$core{date}-$core{time}].edf
#3 -> Player Controller
  Stimulation name = 32770
  Action to perform = Stop
Input stimulations=#3 -> LSL Export
  Signal stream = openvibeSignal
  Marker stream = openvibeMarkers
#3 -> Run Command
  Stimulation 1 = 33084
  Command 1 = wt D:/Miniconda/python.exe d:/sharegit/SomaStim/python/conection_ov_ino.py COM13
Experiment information=#0.Experiment information, Signal=#1, Stimulations=#3 -> EDF File Writer
  Filename = D:/Neuro/Data/f1_record-[$core{date}-$core{time}].edf
Data=#2, Stimulations=#3, Channel Units=#0.Channel units -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Experiment information=#0.Experiment information, Signal=#2, Stimulations=#3 -> EDF File Writer
  Filename = D:/Neuro/Data/f2_record-[$core{date}-$core{time}].edf
