OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.0.0)

0x341d3912 Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Lua Stimulator => #1
  Lua Script = D:/Kevin_Cepeda/OpenVibe/OpV/PruebaCaricias.lua
Input stimulations=#1 -> LSL Export
  Signal stream = openvibeSignal
  Marker stream = openvibeMarkers
Data=#0.Signal stream, Stimulations=#1, Channel Units=#0.Channel units -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Experiment information=#0.Experiment information, Signal=#0.Signal stream, Stimulation=#1 -> 0x341d3912 GDF file writer
  Filename = D:/Kevin_Cepeda/OpenVibe/OpV/record-[$core{date}-$core{time}].gdf
