OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.0.0)

0x341d3912 Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Lua Stimulator => #1
  Lua Script = D:/Kevin_Cepeda/shared_git/neuro/SomaStim/openvibe/Keyboardvib_20st.lua
Experiment information=#0.Experiment information, Signal=#0.Signal stream, Stimulation=#1 -> 0x341d3912 GDF file writer
  Filename = D:/Kevin_Cepeda/OpenVibe/OpV/Vib-[$core{date}-$core{time}].gdf
#1 -> Player Controller
  Stimulation name = 32770
  Action to perform = Stop
#1 -> Python 3 scripting
  Clock frequency (Hz) = 64
  Script = D:/Kevin_Cepeda/shared_git/neuro/SomaStim/python/OV_ino.py
Input stimulations=#1 -> LSL Export
  Signal stream = openvibeSignal
  Marker stream = openvibeMarkers
Sinus oscillator => #6
  Channel count = 4
  Sampling frequency = 512
  Generated epoch sample count = 32
Data=#6, Stimulations=#1, Channel Units=#0.Channel units -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
