OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.0.0)

0x341d3912 Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> 0x341d3912 Temporal Filter => #1
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 56
#0.Signal stream -> 0x341d3912 Temporal Filter => #2
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 4
  High Cut-off Frequency (Hz) = 30
Lua Stimulator => #3
  Lua Script = C:/Users/marag/Documents/Innovate/NuevoAire.lua
-> Stimulation Validator
  Stimulation to count = 32770
  Number for validation = 2
-> Player Controller
  Stimulation name = 32770
  Action to perform = Stop
Data=#0.Signal stream, Stimulations=#3, Channel Units=#0.Channel units -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Experiment information=#0.Experiment information, Signal=#0.Signal stream, Stimulations=#3 -> 0x341d3912 EDF File Writer
  Filename = C:/Users/ferna/Downloads/Innovate/raw_record-[$core{date}-$core{time}].edf
Input stimulations=#3 -> LSL Export
  Signal stream = openvibeSignal
  Marker stream = openvibeMarkers
Experiment information=#0.Experiment information, Signal=#0.Signal stream, Stimulation=#3 -> 0x341d3912 GDF file writer
  Filename = D:/Neuro/Data/Vib-[$core{date}-$core{time}].gdf
#3 -> Run Command
  Stimulation 1 = 33084
  Command 1 = wt python C:/Users/marag/Documents/Innovate/conection_ov_ino.py COM3
Data=#1, Stimulations=#3, Channel Units=#0.Channel units -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Signal=#2, Stimulations=#3 -> 0x341d3912 EDF File Writer
  Filename = C:/Users/ferna/Downloads/Innovate/f2_record-[$core{date}-$core{time}].edf
Keyboard stimulator => #13
  Filename = C:/Users/marag/Documents/Innovate/simplekeyboardtostimulations.txt
Input stimulations 1=#13, Input stimulations 2=#3 -> Stimulation multiplexer => #14
Experiment information=#0.Experiment information, Signal=#1, Stimulations=#14 -> 0x341d3912 EDF File Writer
  Filename = C:/Users/ferna/Downloads/Innovate/f1_record-[$core{date}-$core{time}].edf
Sinus oscillator => #16
  Channel count = 4
  Sampling frequency = 512
  Generated epoch sample count = 32
Data=#16, Stimulations=#14, Channel Units=#0.Channel units -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
