OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.0.0)

0x341d3912 Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
0x341d3912 Keyboard stimulator
  Filename = D:/Kevin_Cepeda/shared_git/neuro/SomaStim/openvibe/Keyboard.txt
-> Lua Stimulator => #2
  Lua Script = D:/sharegit/SomaStim/openvibe/Caricia_20st.lua
Input stimulations=#2 -> 0x341d3912 LSL Export
  Signal stream = openvibeSignal
  Marker stream = openvibeMarkers
Experiment information=#0.Experiment information, Signal=#0.Signal stream, Stimulation=#2 -> 0x341d3912 GDF file writer
  Filename = D:/Kevin_Cepeda/OpenVibe/OpV/record-[$core{date}-$core{time}].gdf
#2 -> Player Controller
  Stimulation name = 32770
  Action to perform = Stop
Sinus oscillator => #6
  Channel count = 4
  Sampling frequency = 512
  Generated epoch sample count = 32
Data=#6, Stimulations=#2, Channel Units=#0.Channel units -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
