OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Lua Stimulator => #1
  Lua Script = D:/sharegit/SomaStim/openvibe/caress/Validation/Caress30st40int.lua
Data=#0.Signal stream, Stimulations=#1, Channel Units=#0.Channel units -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Experiment information=#0.Experiment information, Signal=#0.Signal stream, Stimulation=#1 -> GDF file writer
  Filename = D:/sharegit/SomaStim/openvibe/caress/Validation/CaressVal-[$core{date}-$core{time}].gdf
Input stimulations=#1 -> LSL Export
  Signal stream = openvibeSignal
  Marker stream = openvibeMarkers
#1 -> Stimulation Validator
  Stimulation to count = 32770
  Number for validation = 2
-> Player Controller
  Stimulation name = 32770
  Action to perform = Stop
#1 -> Run Command
  Stimulation 1 = 33084
  Command 1 = wt D:/Miniconda/python.exe d:/sharegit/SomaStim/python/conection_ov_ino.py COM13
Experiment information=#0.Experiment information, Signal=#0.Signal stream, Stimulations=#1 -> EDF File Writer
  Filename = D:/sharegit/SomaStim/openvibe/caress/Validation/caressVal-record-[$core{date}-$core{time}].edf
